# This script is responsible for getting parameter settings and holding global variables

array <int> BLOCK[0];

array <int> IDENTITY[0];
array <int> NUMBER[0];

array <string> IMAGE_FILES[0];
array <string> SOUND_FILES[0];

array <int> IMAGE_TIME_WINDOWS[0][2][2]; # [ [start_time_pic, stop_time_pic] , [start_time_pic, stop_time_pic] ]

array <video> MOVIES[0];
array <string> MOVIE_LIST_FILENAMES[0];
parameter_manager.get_strings("Video Files", MOVIE_LIST_FILENAMES);

string TRIAL_LIST_FILENAME = parameter_manager.get_string("Trial List");

string SOUND_DIR = "sounds/";
string IMAGE_DIR = "images/";
string MOVIE_DIR = "movies/";